CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C25-1")
    Name to assign these images:DNA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C25-3")
    Name to assign these images:DNA2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA2
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):25,35
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

EditObjectsManually:[module_num:6|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
    Select the objects to be edited:IdentifyPrimaryObjects
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:DNA2
    Allow overlapping objects?:No

OverlayObjects:[module_num:7|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
    Input:DNA1
    Name the output image:OverlayObjects
    Objects:EditedObjects
    Opacity:0.3

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA1
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:EditedObjects

ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:EditedObjects
    Name the output objects:ShrunkenNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA1
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ShrunkenNuclei
