CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:46
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Select the rule criteria:and (file does contain "Ori1")
    Name to assign these images:OriginalGel1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ori2")
    Name to assign these images:OriginalGel2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Edit1")
    Name to assign these images:Edit1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Edit2")
    Name to assign these images:Edit2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Invert1
    Image or measurement?:Image
    Select the first image:Edit1
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Invert2
    Image or measurement?:Image
    Select the first image:Edit2
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:7|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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:AreaSumInvertida
    Image or measurement?:Image
    Select the first image:Invert1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Invert2
    Multiply the second image by:1.0
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
ImageMath:[module_num:8|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
    Operation:Minimum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Areacomun
    Image or measurement?:Image
    Select the first image:Invert1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Invert2
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Areacomun
    Name the primary objects to be identified:DotComunes1
    Typical diameter of objects, in pixel units (Min,Max):14,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
EditObjectsManually:[module_num:10|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
    Select the objects to be edited:DotComunes1
    Name the edited objects:DotsComunes2
    Retain outlines of the edited objects?:No
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    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Areacomun
    Allow overlapping objects?:No

ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:DotsComunes2
    Name the output objects:DotsComunesExp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
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    Retain the outlines of the identified objects?:No
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
MaskImage:[module_num:12|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
    Select the input image:Invert1
    Name the output image:INv1
    Use objects or an image as a mask?:Objects
    Select object for mask:DotsComunesExp
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:INv1
    Name the primary objects to be identified:ppDotsEXCTG1
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
EditObjectsManually:[module_num:14|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
    Select the objects to be edited:ppDotsEXCTG1
    Name the edited objects:pDotsEXCTG1
    Retain outlines of the edited objects?:No
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    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:INv1
    Allow overlapping objects?:No

ExpandOrShrinkObjects:[module_num:15|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
    Select the input objects:pDotsEXCTG1
    Name the output objects:DotsEXCTG1
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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    Retain the outlines of the identified objects?:No
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
MaskImage:[module_num:16|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
    Select the input image:Invert1
    Name the output image:ComunesENG1
    Use objects or an image as a mask?:Objects
    Select object for mask:DotsEXCTG1
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:ComunesENG1
    Name the primary objects to be identified:pComunesenG1
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
EditObjectsManually:[module_num:18|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
    Select the objects to be edited:pComunesenG1
    Name the edited objects:ComunesenG1
    Retain outlines of the edited objects?:No
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    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:ComunesENG1
    Allow overlapping objects?:No

ExpandOrShrinkObjects:[module_num:19|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
    Select the input objects:ComunesenG1
    Name the output objects:ComunesenG1EXP
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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    Retain the outlines of the identified objects?:No
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
MaskImage:[module_num:20|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
    Select the input image:Invert2
    Name the output image:INv2
    Use objects or an image as a mask?:Objects
    Select object for mask:DotsComunesExp
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:INv2
    Name the primary objects to be identified:ppDotsEXCg2
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
EditObjectsManually:[module_num:22|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
    Select the objects to be edited:ppDotsEXCg2
    Name the edited objects:pDotsEXCg2
    Retain outlines of the edited objects?:No
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    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:INv2
    Allow overlapping objects?:No

ExpandOrShrinkObjects:[module_num:23|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
    Select the input objects:pDotsEXCg2
    Name the output objects:DotsEXCTG2
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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    Retain the outlines of the identified objects?:No
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
MaskImage:[module_num:24|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
    Select the input image:Invert2
    Name the output image:ComunesENG2
    Use objects or an image as a mask?:Objects
    Select object for mask:DotsEXCTG2
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:25|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
    Select the input image:ComunesENG2
    Name the primary objects to be identified:pComunesenG2
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
EditObjectsManually:[module_num:26|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
    Select the objects to be edited:pComunesenG2
    Name the edited objects:ComunesenG2
    Retain outlines of the edited objects?:No
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    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:ComunesENG2
    Allow overlapping objects?:No

ExpandOrShrinkObjects:[module_num:27|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
    Select the input objects:ComunesenG2
    Name the output objects:ComunesenG2EXP
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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    Retain the outlines of the identified objects?:No
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
OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:AreaSumInvertida
    Name the output image:OrigMixtas
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:DotsEXCTG1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:DotsComunesExp
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    Select outline color:Blue
    Load outlines from an image or objects?:Objects
    Select objects to display:DotsEXCTG2

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OriginalGel1
    Name the output image:OrigOverlayGel1_v0
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:DotsEXCTG1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:DotsComunesExp

OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OriginalGel1
    Name the output image:OrigOverlayGel1_v1
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:pDotsEXCTG1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:DotsComunesExp

OverlayOutlines:[module_num:31|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OriginalGel1
    Name the output image:OrigOverlayGel1_v2
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:pDotsEXCTG1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:ComunesenG1

OverlayOutlines:[module_num:32|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OriginalGel1
    Name the output image:OrigOverlayGel1_v3
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:pDotsEXCTG1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:ComunesenG1EXP

OverlayOutlines:[module_num:33|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OriginalGel2
    Name the output image:OrigOverlayGel2_v0
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:DotsEXCTG2
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:DotsComunesExp

OverlayOutlines:[module_num:34|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OriginalGel2
    Name the output image:OrigOverlayGel2_v1
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:pDotsEXCg2
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:DotsComunesExp

OverlayOutlines:[module_num:35|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OriginalGel2
    Name the output image:OrigOverlayGel2_v2
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:pDotsEXCg2
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:ComunesenG2

OverlayOutlines:[module_num:36|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OriginalGel2
    Name the output image:OrigOverlayGel2_v3
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:pDotsEXCg2
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:ComunesenG2EXP

ExportToSpreadsheet:[module_num:37|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :DotsComunesExp|Number_Object_Number,ComunesenG1|Number_Object_Number,Image|Count_DotsComunesExp,Image|Count_ComunesenG1,Image|Count_ComunesenG2,Image|Count_DotsEXCTG1,Image|Count_DotsEXCTG2,ComunesenG2|Number_Object_Number,DotsEXCTG1|Number_Object_Number,DotsEXCTG2|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:OrigMixtas
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    Select method for constructing file names:Single name
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    Enter single file name:Mixtas
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGel1_v0
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalGel1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:v0
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGel1_v1
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalGel1
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGel1_v2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalGel1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:v2
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGel1_v3
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalGel1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:v3
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGel2_v0
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalGel2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:v0
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGel2_v1
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalGel2
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGel2_v2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalGel2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:v2
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGel2_v3
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalGel2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:v3
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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